PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[-1,-1,-1]
  expName = HW1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent target_text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $text
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    KeyboardComponent key_resp
      allowedKeys = 'space','down','left','right','up'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine welcome
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        歡迎參加本實驗！
        請依據看到的顏色按下對應的按鈕：
        紅色：按左(←)
        藍色：按右(→)
        黃色按上(↑)
        綠色：按下(↓)
        紫色：按空白鍵(Space)


        請盡可能快速且準確地反應。
        準備好後，按任意鍵即可開始測驗
    KeyboardComponent start_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # 嘗試從 trials 迴圈中抓取數據
        try:
            # 計算平均反應時間 (取小數點後三位)
            curr_rt = round(trials.data['key_resp.rt'].mean(), 3)
            # 計算正確率 (百分比取小數點後一位)
            curr_acc = round(trials.data['key_resp.corr'].mean() * 100, 1)

            msg = f"實驗結束，感謝參與！\n\n您的平均反應時間：{curr_rt} 秒\n您的正確率：{curr_acc}%"
        except Exception:
            # 如果抓不到數據 (例如沒按鍵就結束)，顯示備用文字
            msg = "實驗結束，感謝參與！\n您的數據已成功儲存。"
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ASUS Zenbook/Desktop/con.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'text': '紅', 'color': 'red', 'congruent': 1.0, 'corrAns': 'left'},
      {'text': '綠', 'color': 'green', 'congruent': 1.0, 'corrAns': 'down'},
      {'text': '藍', 'color': 'blue', 'congruent': 1.0, 'corrAns': 'right'},
      {'text': '黃', 'color': 'yellow', 'congruent': 1.0, 'corrAns': 'up'},
      {'text': '紫', 'color': 'purple', 'congruent': 1.0, 'corrAns': 'space'},
      {'text': '黃', 'color': 'purple', 'congruent': 0.0, 'corrAns': 'space'},
      {'text': '紫', 'color': 'yellow', 'congruent': 0.0, 'corrAns': 'up'}]
    Routine trial
  LoopTerminator trials
  Routine end
